CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '---', 'Settings converted from legacy pipeline.']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '---', 'Settings converted from legacy pipeline.']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Settings converted from legacy pipeline.', 'Please change any color images from "Load as Grayscale image" to "Load as Color image"']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (file does containregexp ".tiff") (file does containregexp ".TIF") (file does contain ".tif") (file does contain ".jpg")
    Name to assign these images:raw_images
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '---', 'Settings converted from legacy pipeline.', 'WARNING: original pipeline used metadata grouping which was not converted during processing of current pipeline.']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
    Do you want to group your images?:No
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
Opening:[module_num:5|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
    Select the input image:raw_images
    Name the output image:Opening
    Structuring element:disk,25

Closing:[module_num:6|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
    Select the input image:Opening
    Name the output image:Closing
    Structuring element:disk,25

ImageMath:[module_num:7|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:Closing
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Identify the nuclei from the histone stain image. Three-class thresholding works better than the default two-class method.']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
    Select the input image:ImageAfterMath
    Name the primary objects to be identified:Organoids
    Typical diameter of objects, in pixel units (Min,Max):250,50000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:Organoids
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:10|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
    Select the objects to filter:Organoids
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:200000
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:11|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
    Select the input objects:FilterObjects
    Name the output image:OrganoidImage
    Select the color format:Grayscale
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:OrganoidImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw_images
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_finalMask
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|OneDrive\\Desktop\\gastr4comparison\\2021-03-05_braGFP_ESLIF_96hpa\\cellprofiler
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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